% # CaBuffer_PYdr: Calcium buffer concentration dynamics, for generic
%     pyramidal dendrite compartments used in the DynaSim implementation of
%     (Bazhenov et al., 2002). Note that in the original code, this
%     compartment/cell type is called CX or CX_DEND, and this mechanism is
%     identified as ICa, even though it is not a current.
%
% - Source: This was built from the original paper's code, using "currents.h"
%     lines 339-340, 1204 and "currents.cpp" lines 133-139.
%
% - References:
%     - Bazhenov M, Timofeev I, Steriade M, Sejnowski TJ. Model of thalamocortical
%         slow-wave sleep oscillations and transitions to activated states. The
%         Journal of Neuroscience. 2002;22: 8691–8704.
%
% - Requires: "@IHVA_PYdr" exposed by "IHVA_PYdr" mechanism (which is,
%     confusingly, called "IHVA_CX", NOT ICa, in the original code).
%
% - Exposes: calcium concentration "@CaBuffer_PYdr" required for
%     "iKCa_PYdr" mechanism
%
% - Tags: calcium, intrinsic, pyramidal, dendrite
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
tauR = 165       % ms
Ca_inf = 0.00024 % mM of calcium, aka 2.4e-4
D = 1            % unitless conversion factor, unclear purpose
% See "Interneuron-mediated inhibition synchronizes neuronal activity during slow
%     oscillation" Chen et al., 2012, Equation 5:
A = 10/(2*96489) % mM cm^2/(ms uA) drive conversion of Ca-modifying currents
CaBufferIC = 0.000001
CaBufferNoiseIC = 0.0001

% ODEs
% In original code, the CaBuffer requires input from IHVA, but CaBuffer is only
%     used by IKCa
CaBuffer_PYdr' = max(-A.*@IHVA_PYdr./D, 0) + (Ca_inf - CaBuffer_PYdr)./tauR
CaBuffer_PYdr(0) = CaBufferIC+CaBufferNoiseIC.*rand(1,Npop)

% Interface
@CaBuffer_PYdr += CaBuffer_PYdr
