% # CaBuffer_PYdr_B02: Calcium buffer concentration dynamics, for generic
%     pyramidal dendrite compartments used in the DynaSim implementation of
%     (Bazhenov et al., 2002). Note that in the original code, this
%     compartment/cell type is called CX or CX_DEND, and this mechanism is
%     identified as ICa, even though it is not a current.
%
% - Requires: "@IHVA_PYdr_B02" exposed by "IHVA_PYdr_B02" mechanism (which is
%     called "IHVA_CX", NOT ICa, in the original code).
%
% - Exposes: calcium concentration "@CaBuffer_PYdr_B02" required for
%     "iKCa_PYdr_B02" mechanism
%
% - References:
%     - Bazhenov M, Timofeev I, Steriade M, Sejnowski TJ. Model of thalamocortical
%         slow-wave sleep oscillations and transitions to activated states. The
%         Journal of Neuroscience. 2002;22: 8691–8704.
%     - Chen J-Y, Chauvette S, Skorheim S, Timofeev I, Bazhenov M.
%         Interneuron-mediated inhibition synchronizes neuronal activity during
%         slow oscillation. The Journal of Physiology. 2012;590: 3987–4010.
%         doi:10.1113/jphysiol.2012.227462
%
% - Tags: calcium, intrinsic, pyramidal, dendrite
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
tauR = 165       % ms
Ca_inf = 0.00024 % mM of calcium, aka 2.4e-4
D = 1            % unitless conversion factor, unclear purpose
% See (Chen et al., 2012) Equation 5:
A = 10/(2*96489) % mM cm^2/(ms uA) drive conversion of Ca-modifying currents
CaBufferIC = 0.000001
CaBufferNoiseIC = 0.0001

% ODEs
% In original code, the CaBuffer requires input from IHVA, but CaBuffer is only
%     used by IKCa
CaBuffer_PYdr_B02' = max(-A.*@IHVA_PYdr_B02./D, 0) + (Ca_inf - CaBuffer_PYdr_B02)./tauR
CaBuffer_PYdr_B02(0) = CaBufferIC+CaBufferNoiseIC.*rand(1,Npop)

% Interface
@CaBuffer_PYdr_B02 += CaBuffer_PYdr_B02
