% # iCOM_PYdr_PYso_B02: Simple ohmic axial current for connecting FROM PY cell
%     axo-somatic compartments TO PY cell dendritic compartments PYdr<-PYso_B02
%     used in the DynaSim implementation of (Bazhenov et al., 2002). Note that
%     in the original code, this cell type is called CX, and the compartments
%     are called CX_DEND or CX_SOMA. This mechanism should be used twice, once
%     for dendrite to soma, and once for soma to dendrite.
%
% - Source: This was built from a combination of the original paper and its
%     code, using "currents.h" lines 219, 1249-1285 and "currents.cpp" lines
%     1080-1097.
%
% - References:
%     - Bazhenov M, Timofeev I, Steriade M, Sejnowski TJ. Model of thalamocortical
%         slow-wave sleep oscillations and transitions to activated states. The
%         Journal of Neuroscience. 2002;22: 8691–8704.
%     - Mainen ZF, Sejnowski TJ. Influence of dendritic structure on firing
%         pattern in model neocortical neurons. Nature. 1996;382: 363–366.
%         doi:10.1038/382363a0
%
% - Tags: current, pyramidal, dendrite, soma
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
% Since DynaSim uses maximal conductances in units "mS/cm^2" for all currents,
%     including connective ones, we have to convert the conductancee. The
%     original paper cites (Mainen & Sejnowski, 1996) for most of this
%     derivation. (Bazhenov et al., 2002), its predecessors, and its code give
%     the resistance between compartments as a variable "kappa", which is 10
%     MOhm = 10e3 kOhm. The area of the soma compartment is given as 100 um^2 =
%     1e-6 cm^2 in (Mainen & Sejnowski, 1996), while the area of the dendrite
%     compartment is given as a multiple "rho" of the soma compartment area,
%     where rho = 165 in the code for (Bazhenov et al., 2002). In the original
%     code, it seems the dendritic area was used to calculate the conductance
%     of the connection. Since conductance in mSiemens is the reciprocal of
%     resistance in kOhms, we can convert to mS/cm^2 using:
%
%     1 / (kappa=10e3 kOhm) * 1 / (rho=165 * S_CX_SOMA=1e-6 cm^2) = 0.6 mS/cm^2
gCOM=0.6

% Functions
% Note that this is the same as -gCOM * (Vdr - Vso) = gCOM * (Vso - Vdr)
ICOM_PYdr_PYso_B02(IN,OUT) = gCOM.*(IN-OUT)

% Linkers
@current += ICOM_PYdr_PYso_B02(IN,OUT)
