% # iKCa_INdr: slow calcium-dependent potassium current, for generic
%     interneuron dendrite compartments used in the DynaSim implementation of
%     (Bazhenov et al., 2002). In the original code, this compartment/cell type
%     is called CX, CX_DEND, and sometimes IN, and this current is called
%     IKCa_CX.
%
% - Note: In original code, IKCa consumes y[1] which is `Cai0` for the
%     celltype, and y[1] is also used as the primary state variable `cai` for
%     the confusingly-named Ca buffer ICa, therefore IKCa is using the cai of
%     ICa.
%
% - Note: In original code, an experiment factor `fac_gkca_cx` is declared but
%     never used, so we're leaving it out.
%
% - Source: This was built from the original paper's code, using "currents.h"
%     lines 439-444, 1207 and "currents.cpp" lines 225-237.
%
% - References:
%     - Bazhenov M, Timofeev I, Steriade M, Sejnowski TJ. Model of thalamocortical
%         slow-wave sleep oscillations and transitions to activated states. The
%         Journal of Neuroscience. 2002;22: 8691–8704.
%
% - Requires: @CaBuffer_INdr calcium concentration exposed by
%     "CaBuffer_INdr" mechanism
%
% - Tags: calcium, potassium, current, intrinsic, interneuron, dendrite
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
gKCa = 0.3 % mS/cm^2
EKCa = -90  % mV
% The Q10 temperature adjustment values never change over the course of the
%     simulations, so we are setting them to be constant.
% Called "Tad" in original code, unlike Q's of "IHVA_INdr".
phiM = 2.3^((36-23)/10)

mKCaIC = 0.1
mKCaNoiseIC = 0.1

% In the original code, this sleep stage experimental factor is represented by
%     `fac_gkca_cx`, but it is never used!
fac_KCa_INdr = 1  % unitless

% Functions
% In original code, there is a note that the Cai exponent is 1
alphaM(CaBuffer_INdr) = 0.01.*CaBuffer_INdr
betaM = 0.02

tauM(CaBuffer_INdr) = (1./(alphaM(@CaBuffer_INdr) + betaM))./phiM
Minf(CaBuffer_INdr) = alphaM(@CaBuffer_INdr)./(alphaM(@CaBuffer_INdr) + betaM)

IKCa_INdr(X,mKCa) = -phiM.*fac_KCa_INdr.*gKCa.*mKCa.*(X-EKCa)

monitor IKCa_INdr

% ODEs and ICs
mKCa' = (Minf(@CaBuffer_INdr) - mKCa)./tauM(@CaBuffer_INdr)
mKCa(0)=mKCaIC+mKCaNoiseIC.*rand(1,Npop)

% Interface
@current += IKCa_INdr(X,mKCa)
