% # iNMDA_PYdr_PYso: Normalized synaptic NMDAergic excitatory current FROM the
%     pyramidal axo-soma TO pyramidal dendrite PYdr<-PYso connection used in
%     the DynaSim implementation of (Bazhenov et al., 2002). Note that in the
%     original code, the class for this current is called NMDA_D1, PYso are
%     called CX or CX_SOMA, and PYdr are called CX or CX_DEND. Also note that,
%     instead of using a Heaviside increase in transmitter concentration upon
%     spike detection, we used the (1 + tanh(V/4)) formulation from (Ermentrout
%     & Kopell, 1998) for our spike detector and transmitter concentration
%     model.
%
% - Note: Even though NMDA_D1 contains the code for using synaptic depression,
%     because it is initialized with `Use = 0.0` on "currents.h" line 889, the
%     synaptic depression will never affect the simulation, and therefore does
%     not need to be calculated.
%
% - Source: This was built from the original paper's code, using "currents.h"
%     lines 219, 865-897, 1258, 1280-1281, "currents.cpp" lines 665-705, and
%     "network.cfg" line 32.
%
% - References:
%     - Ermentrout GB, Kopell N. Fine structure of neural spiking and
%         synchronization in the presence of conduction delays. Proceedings of
%         the National Academy of Sciences. 1998;95: 1259–1264.
%     - Bazhenov M, Timofeev I, Steriade M, Sejnowski TJ. Model of thalamocortical
%         slow-wave sleep oscillations and transitions to activated states. The
%         Journal of Neuroscience. 2002;22: 8691–8704.
%
% - Tags: synapse, connection, excitation, ampa
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
%
% For the PYso to PYdr connection, the conductance is given by the original
%     paper "absolutely" as 0.001 uS. We first need to normalize this value over
%     the area of the target cell and convert the conductance to mS/cm^2. We do
%     this by converting uS to mS and dividing by the area of the target PYdr
%     compartments:
%
%    0.001 uS * (1 mS / 1000 uS) * (1 / (165*1e-6 cm^2) = 0.006 mS/cm^2
%
gNMDA = 0.006 % mS/cm^2
ENMDA = 0    % mV

sNMDAIC = 0.1
sNMDANoiseIC = 0.1

% Note that alpha rate here corresponds to the inverse of the rise  time constant, 1/tauR, and
%        the beta rate here corresponds to the inverse of the decay time constant, 1/tauD
alpha = 1      % ms^-1
beta  = 0.0067 % ms^-1

% Connective radius, aka how many target cells each source cell connects to,
%     from the source's perspective.
radius = 5

% We also need to normalize the conductance in mS/cm^2 by the number of
%     connections each target cell is receiving on average, so that the TOTAL sum
%     of their conductive inputs adds to our overall maximal conductance above.
% AES
% normalizingFactor = min(((2*radius + 1) / (N_post/N_pre)), N_pre)
normalizingFactor = 10


% Functions
% Remove autapses to the dendrite corresponding to this soma
removeRecurrentBool = 1
% Note that what is passed is 2x the radius
netcon = netconNearestNeighbors(2*radius, N_pre, N_post, removeRecurrentBool)

% AES
weirdFunction(voltage) = 1./(1+exp(-(voltage - (-25))./12.5))

INMDA_PYdr_PYso(X,s) = -gNMDA/normalizingFactor.*(s*netcon).*weirdFunction(X).*(X-ENMDA)

% This way we record the synaptic currents!
monitor INMDA_PYdr_PYso


% ODEs and ICs
s' = alpha.*(1 + tanh(X_pre./4)).*(1-s) - beta.*s
s(0) = sNMDAIC+sNMDANoiseIC.*rand(1,N_pre)


% Linker
@current += INMDA_PYdr_PYso(X_post,s)
